PsychoPy2experiment version="1.83.03"
Settings
  Show mouse = True
  Data filename = u'data' + os.path.sep + expInfo['date']
  Monitor = mainMonitor
  color = black
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'rechtshandig': u'', u'geslacht': u'', u'leeftijd': u'', u'list': u'A', u'deelnemer': u'1', u'opleiding': u''}
  expName = sentJudg
  logging level = warning
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine practice
    TextComponent word_6
      color [set every repeat] = white
      text [set every repeat] = $sent
      startVal [time (s)] = 0.5
      font = Verdana
      letterHeight = 0.1
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    RatingScaleComponent rating_6
      pos = 0, -0.7
      startVal [time (s)] = 0.5
      disappear = True
      size = .9
      forceEndRoutine = True
      visualAnalogScale = True
      singleClick = True
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      customize_everything:
        choices=[1,2,3,4,5,6,7],
        mouseOnly=False,
        pos=(0,-0.7),
        marker='triangle',
        markerColor='blue',
        size=0.85,
        singleClick=False, disappear=False
    TextComponent text_14
      color = gray
      text = onacceptabel
      pos = [-0.265, -0.6]
      startVal [time (s)] = 0.5
      font = Verdana
      letterHeight = 0.05
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    TextComponent text_15
      color = gray
      text = acceptabel
      pos = [0.265,-0.6]
      startVal [time (s)] = 0.5
      font = Verdana
      letterHeight = 0.05
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  Routine instruction
    TextComponent instrText_2
      startVal [time (s)] = 0.5
      font = Verdana
      letterHeight = 0.1
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      text:
        Welcome to this experiment.

        We will show you a series of sentences and your task will be to rate how acceptable you think it is using the rating scale provided.

        When you are ready, press the space bar.
    KeyboardComponent ready_2
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent text
      opacity = 0.7
      color = $[-0.122,0.522,0.514]
      text = Druk de spatiebalk om verder te gaan!
      pos = [0, -0.77]
      startVal [time (s)] = 0.5
      font = Verdana
      letterHeight = 0.07
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Flow
  Routine instruction
  LoopInitiator PracSent loopType="TrialHandler"
    conditionsFile = pract.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': u'a', 'sent': u'Jane ordered a coffee with cream, and Bill a sandwich with cheese.', 'sentID': u'1a'},
      {'condition': u'b', 'sent': u'Peter cooked the steaks on the grill, and Liz the ketchup on the table.', 'sentID': u'2b'},
      {'condition': u'a', 'sent': u'Nancy put the brownies in the oven, and Bonnie the juice in the fridge.', 'sentID': u'4a'},
      {'condition': u'a', 'sent': u'Sally bought on the blouse with the bonnets, and Tracy the suitcase with the leather pockets.', 'sentID': u'5a'}]
    Routine practice
  LoopTerminator PracSent
